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Source:Signal%20Properties:DataIOFilter int SourceCh= 29 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 32 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 1000Hz 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 29 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 29 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= Name Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Storage:Documentation:BCI2000FileWriter int SavePrmFile= 0 1 0 1 // save additional parameter file (0=no, 1=yes) (boolean)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Playback:FilePlaybackADC string PlaybackFileName= C:/DEVEL/matlab/bcilab-0.9-cloud/userdata/tutorial/imag_movements1/calib/DanielS001R01.dat // the path to the existing BCI2000 data file (inputfile)
Source:Playback:FilePlaybackADC int PlaybackStartTime= 0s 0s % % // the start time of the file
Source:Playback:FilePlaybackADC list PlaybackChList= 0 // a list of channels to acquire (empty for all). Use indices, or labels from the ChannelNames as they were recorded in the file.
Source:Playback:FilePlaybackADC float PlaybackSpeed= 1 1 0 100 // a value indicating the factor by which the acquisition should be sped up
Source:Playback:FilePlaybackADC int PlaybackStates= 0 0 0 1 // play back state variable values (except timestamps)? (boolean)
Source:Playback:FilePlaybackADC int PlaybackLooped= 1 0 0 1 // loop playback at the end of the data file instead of suspending execution (boolean)
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 4 1 2 3 4 // list of transmitted channels
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 FilePlaybackADC 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
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Application:Window:ApplicationBase int WindowWidth= 640 640 0 % // width of application window
Application:Window:ApplicationBase int WindowHeight= 480 480 0 % // height of application window
Application:Window:ApplicationBase int WindowLeft= 0 0 % % // screen coordinate of application window's left edge
Application:Window:ApplicationBase int WindowTop= 0 0 % % // screen coordinate of application window's top edge
Application:Sequencing:FeedbackTask float PreRunDuration= 2s 2s 0 % // duration of pause preceding first trial
Application:Sequencing:FeedbackTask float PreFeedbackDuration= 2s 2s 0 % // duration of target display prior to feedback
Application:Sequencing:FeedbackTask float FeedbackDuration= 3s 3s 0 % // duration of feedback
Application:Sequencing:FeedbackTask float PostFeedbackDuration= 1s 1s 0 % // duration of result display after feedback
Application:Sequencing:FeedbackTask float ITIDuration= 1s 1s 0 % // duration of inter-trial interval
Application:Sequencing:FeedbackTask float MinRunLength= 120s 120s 0 % // minimum duration of a run; if blank, NumberOfTrials is used
Application:Sequencing:FeedbackTask int NumberOfTrials= % 0 0 % // number of trials; if blank, MinRunLength is used
Application:Targets:FeedbackTask int NumberTargets= 2 2 0 255 // number of targets
Application:Window:CursorFeedbackTask int RenderingQuality= 1 0 0 1 // rendering quality: 0: low, 1: high (enumeration)
Application:Window:CursorFeedbackTask int WindowBitDepth= 16 16 1 32 // color bit depth of feedback window
Application:Sequencing:CursorFeedbackTask float MaxFeedbackDuration= 3s % 0 % // abort a trial after this amount of feedback time has expired
Application:3DEnvironment:CursorFeedbackTask floatlist CameraPos= 3 50 50 150 // camera position vector in percent coordinates of 3D area
Application:3DEnvironment:CursorFeedbackTask floatlist CameraAim= 3 50 50 50 // camera aim point in percent coordinates
Application:3DEnvironment:CursorFeedbackTask int CameraProjection= 0 0 0 2 // projection type: 0: flat, 1: wide angle perspective, 2: narrow angle perspective (enumeration)
Application:3DEnvironment:CursorFeedbackTask floatlist LightSourcePos= 3 50 50 100 // light source position in percent coordinates
Application:3DEnvironment:CursorFeedbackTask int LightSourceColor= 0x808080 // light source RGB color (color)
Application:3DEnvironment:CursorFeedbackTask int WorkspaceBoundaryColor= 0xffffff 0 % % // workspace boundary color (0xff000000 for invisible) (color)
Application:3DEnvironment:CursorFeedbackTask string WorkspaceBoundaryTexture= images/grid.bmp // path of workspace boundary texture (inputfile)
Application:Cursor:CursorFeedbackTask float CursorWidth= 10 10 0.0 % // feedback cursor width in percent of screen width
Application:Cursor:CursorFeedbackTask int CursorColorFront= 0xff0000 // cursor color when it is at the front of the workspace (color)
Application:Cursor:CursorFeedbackTask int CursorColorBack= 0xffff00 // cursor color when it is in the back of the workspace (color)
Application:Cursor:CursorFeedbackTask string CursorTexture= % // path of cursor texture (inputfile)
Application:Cursor:CursorFeedbackTask floatlist CursorPos= 3 50 50 50 // cursor starting position
Application:Targets:CursorFeedbackTask matrix Targets= 5 { pos%20x pos%20y pos%20z width%20x width%20y width%20z } 35 35 50 8 8 8 65 35 50 8 8 8 35 65 50 8 8 8 65 65 50 8 8 8 0 0 4 8 8 8 // target positions and widths in percentage coordinates
Application:Targets:CursorFeedbackTask int TargetColor= 0x808080 // target color (color)
Application:Targets:CursorFeedbackTask string TargetTexture= % // path of target texture (inputfile)
Application:Targets:CursorFeedbackTask int TestAllTargets= 0 0 0 1 // test all targets for cursor collision? 0: test only the visible current target, 1: test all targets (enumeration)
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20320 % % // IP address/port to write to, e.g. localhost:20320
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= { German } { Timeout Be%20prepared%20... } Inaktiv Achtung%20... // Localized user messages
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System:Configuration matrix ApplicationFilterChain= 3 { Filter%20Name Position%20String } ConnectorInput 2.9999 CursorFeedbackTask 3 ConnectorOutput 3.9999 // Application filter chain
Filtering:SpatialFilter int SpatialFilterType= 3 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // list of output channels for the CAR if used
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 29 29 1 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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1 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter:SpatialFilter int SFUseThreading= 0 0 0 1 // Use threading to calculate spatial filter (boolean)
BCILAB string Model= C:\Devel\matlab\bcilab-0.9-cloud\resources\models\DanielsModel.mat // The BCI model to be used for making predictions, previously generated via BCILAB, usually from some calibration data. (inputfile)
BCILAB string MetaFile= (as in training data) // An optional EEGLAB-supported file which specifies the meta-data of the stream, i.e. channel labels, sampling rate, etc. (inputfile)
BCILAB float OutputRate= 10 10 0 1000 // Rate at which the predictor's outputs will be sampled, in Hz
BCILAB int OutputForm= 1 1 1 3 // Form/type of the BCI outputs. See help of utl_formatprediction.m: 1 expectation, 2 distribution, 3 mode (enumeration)
BCILAB int OutputChannels= 0 0 0 1000 // Number of BCI output channels, if known. Note that this depends on the output form and the type of machine learning module that was used in BCILAB.
BCILAB float MaxCPU= 0.6 0.6 0 1 // Maximum fraction of CPU time allocated for this predictor
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System:Configuration matrix SignalProcessingFilterChain= 3 { Filter%20Name Position%20String } SpatialFilter 2.B MatlabFilter 2.C MatlabFilter 2.C // SignalProcessing filter chain
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